PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = DigiRelax_Experiment
  keyboardBackend = ioHub
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Routines
  Routine Welcome_screen
    TextComponent welcome_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    CodeComponent code_welcome_scr
      Code Type = Py
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      Before Experiment:
        import time
        from psychopy import core
      Begin Experiment:
        # Writing the variables to the log file:
        # the reference time point in Unix format
        timeLeft = 60
        sam_count = 1

        if event:
            thisExp.addData('Reference_time', time.time())
  Routine VAS_Intro
    TextComponent VAS_intro
      color = black
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In der dritten Übungsaufgabe werden Sie mit der Bearbeitung der Skalen vertraut gemacht.
        Auf den nächsten Seiten werden Sie Skalen sehen, auf denen Sie Ihren Gefühlszustand angeben sollen. Die Skalen beziehen sich auf die oben markierten Phasen des letzten Durchgangs (Entspannung davor / Matheaufgaben / Entspannung danach). Bitte beantworten Sie die Frage daher immer nur in Bezug auf den soeben abgeschlossenen Durchgang

        Auf der ersten Skala bitten wir Sie anzugeben, ob Sie sich während der markierten Zeit angenehm oder unangenehm gefühlt haben.
        Fühlten Sie sich zufrieden, glücklich, erfreut, angenehm, also insgesamt eher positiv, dann platzieren Sie den Kreis in der rechten Hälfte der Skala.
        Fühlten Sie sich unzufrieden, unglücklich, genervt, unangenehm also insgesamt eher negativ, dann platzieren Sie den Kreis in der linken Hälfte.

        Auf der zweiten Skala bitten wir Sie anzugeben, wie aktiviert Sie sich während der markierten Zeit gefühlt haben.
        Fühlten Sie sich wach, aufmerksam, nervös, aufgeregt, stimuliert, also insgesamt eher angeregt, dann platzieren Sie den Kreis in der rechten Hälfte.
        Fühlten Sie sich ruhig, unerregt, träge, schläfrig, inaktiv, also insgesamt eher entspannt, dann platzieren Sie den Kreis in der linken Hälfte.

        Auf der dritten Skala bitten wir Sie anzugeben, wie negativ oder positiv Sie sich während der markierten Zeit gefühlt haben.

        Die Skalenmitte stellt immer einen neutralen Punkt dar.

        Drücken Sie bitte die Leertaste, um fortzufahren.
    KeyboardComponent key_interrupt_VAS_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_VAS_fam1
      Code Type = Py
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      Begin Routine:
        timestamp.append(time.time())
  Routine VAS_Valence_fam
    TextComponent VAS_Valence_fam_
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = Wie angeregt waren Sie während des letzten Rechenaufgabe-Blocks?
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    TextComponent VAS_Valence_Slider_Desc_Low_fam
      color = black
      letterHeight = 0.03
      pos = (-0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = unangenehm
      wrapWidth = 200
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    SliderComponent VAS_Valence_Slider_fam
      borderColor = -1.0000, -1.0000, -1.0000
      color = Black
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      letterHeight = 0.05
      pos = (0, -0.175)
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['triangleMarker']
      ticks = (0, 100)
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    TextComponent VAS_Valence_Confirm_fam
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Drücken Sie die Leertaste, um Ihre Auswahl zu bestätigen.
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    TextComponent VAS_Valence_Slider_Desc_High_fam
      color = black
      letterHeight = 0.03
      pos = (0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = angenehm
      wrapWidth = 200
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    ImageComponent VAS_Valence_image_fame
      anchor = top-center
      image = Pictures/VAS_1.png
      pos = (0, .45)
      saveStartStop = False
      size = (1, .25)
      startVal [time (s)] = 0.0
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    CodeComponent VAS_Valence_code_fam
      Code Type = Py
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      Begin Experiment:
        fam_vas_val_trigger = 4
      Begin Routine:
        timestamp.append(time.time())
        #ser.write(bytes(chr(fam_vas_val_trigger), 'UTF-8'))
        thisExp.addData('trigger_time_fam_vas_val', time.time())
      Each Frame:
        special_keys = event.getKeys(keyList=['space'])
        if 'space' in special_keys and VAS_Valence_Slider_fam.getRating():
                continueRoutine = False
  Routine EndOfExp
    TextComponent last_message
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Ende der Testphase.
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    KeyboardComponent key_resp_goodbye
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_end
      Code Type = Py
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      Begin Experiment:
        end_trigger = 47
      Begin Routine:
        timestamp.append(time.time())
        try:
        #    ser.write(bytes(chr(end_trigger, 'UTF-8')))
            thisExp.addData('trigger_time_end', time.time())
        except Exception as e:
            print("Error in begin_routine: ", e)
      End Experiment:
        thisExp.addData('timestamp', timestamp)
        thisExp.addData('TotalReward', reward)
        try:
            #saving the end of Exp in unix time
            thisExp.addData('EndofExp', time.time())
            # closing the serial communication
        #    ser.close()
        except Exception as e:
            print("Error in End experiment: ", e)
  Routine Baseline_Instruction
    TextComponent baseline_instruction
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Nachfolgend wird die Baseline-Messung für 3 Minuten starten.

        Wenn die Testperson bereit ist, drücke bitte die Versuchsleiter-Taste.
    KeyboardComponent key_baseline_instruction
      allowedKeys = 'e'
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_baseline_instruction
      Code Type = Auto->JS
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      Before Experiment:
        import time
        from psychopy import core
      Begin Experiment:
        # Writing the variables to the log file:
        # the reference time point in Unix format
        timeLeft = 60
        sam_count = 1
        if event:
            thisExp.addData('Reference_time', time.time())
      Begin Routine:
        win.mouseVisible = False
      Each Frame:
        # if 'space' in baseline_instruction.keys:  # before ".key" should be the name of the component
        if key_baseline_instruction.keys == 'e':
            # save the unix timestamp in the variable and export it to the log
            thisExp.addData('baseline_instruction_ts', time.time())
            continueRoutine = False  # this ends the routine without waiting for the routine's set duration
  Routine Sampling_countdown
    TextComponent sampling_countdown
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $timeLeft
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    CodeComponent code_sampling_countdown
      Code Type = Auto->JS
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      Begin Routine:
        sample_clock = core.Clock()  # Initialize a clock to keep track of time
        samplecountDown = 60  # 60 - The starting value of the countdown in seconds


        #you can adjust the time by changing "samplecountDown"
      Each Frame:
        timer_ = samplecountDown - int(sample_clock.getTime())
        #calcualting minutes and second.
        minutes = int(timer_ / 60)
        seconds = int(timer_ - (minutes * 60))
        if minutes < 10:
            minutes_str = '0' + str(minutes)
        else:
            minutes_str = str(minutes)
        if seconds < 10:
            seconds_str = '0' + str(seconds)
        else:
            seconds_str = str(seconds)
        timeLeft = minutes_str + ':' + seconds_str

        if timer_ <= 0:
            timer_ = 0   # Ensure it doesn't display negative numbers
            timeLeft = 0
            continueRoutine = False
    TextComponent Salivia_heading
      color = 0.3255, 0.3255, 0.3255
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Speichelprobe Countdown
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    KeyboardComponent skip_key_2
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine change_room
    TextComponent change_room_instruction
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        Nun startet der aktive Teil des Experiments.

        - Wechsel in Raum 2-

        [VL Tastendruck]
    KeyboardComponent change_room_key
      allowedKeys = 'e'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_change_room
      Code Type = Py
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      Each Frame:
        if change_room_key.keys == 'e':
            thisExp.addData('change_room_ts', time.time())
            continueRoutine = False  # this ends the routine without waiting for the routine's set duration
  Routine TSST_preparation
    TextComponent tsst_prep
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        Vorbereitungszeit

        [VL Taste für Start TSST Vorbereitung]
    KeyboardComponent tsst_prep_key
      allowedKeys = 'e'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_tsst_prep
      Code Type = Auto->JS
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      Each Frame:
        if tsst_prep_key.keys == 'e':
            # save the unix timestamp in the variable and export it to the log
            thisExp.addData('tsst_prep_ts', time.time())
            continueRoutine = False  # this ends the routine without waiting for the routine's set duration
  Routine TSST_presentation
    TextComponent tsst_pres
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        TSST Präsentation

        [VL Taste drücken, sobald TSST Präsentation startet]
    KeyboardComponent tsst_pres_key
      allowedKeys = 'e'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_tsst_pres
      Code Type = Auto->JS
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      Each Frame:
        if tsst_pres_key.keys == 'e':
            # save the unix timestamp in the variable and export it to the log
            thisExp.addData('tsst_pres_ts', time.time())
            continueRoutine = False  # this ends the routine without waiting for the routine's set duration
  Routine TSST_arithmetic
    TextComponent tsst_arithmetic
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        [Präsentation im Gange]

        [VL: Bitte Taste drücken, sobald arithmetic task beginnt]
    KeyboardComponent tsst_arithmetic_key
      allowedKeys = 'e'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_tsst_arithmetic
      Code Type = Auto->JS
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      Each Frame:
        if tsst_arithmetic_key.keys == 'e':
            # save the unix timestamp in the variable and export it to the log
            thisExp.addData('tsst_arithmetic_ts', time.time())
            continueRoutine = False  # this ends the routine without waiting for the routine's set duration
  Routine TSST_end
    TextComponent tsst_end
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        TSST beendet
        [VL: Bitte Taste drücken, um zum SAM zu gelangen]
    KeyboardComponent tsst_end_key
      allowedKeys = 'e'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_tsst_end
      Code Type = Py
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      Each Frame:
        if tsst_end_key.keys == 'e':
            # save the unix timestamp in the variable and export it to the log
            thisExp.addData('tsst_end_exp_ts', time.time())
            continueRoutine = False  # this ends the routine without waiting for the routine's set duration
      End Routine:
        win.mouseVisible = True
  Routine Relaxation_instruction
    TextComponent relaxation_instruction
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        Start passiver Teil des Experiments.

        [VL Taste zum Start Relaxation]
    KeyboardComponent relaxation_instruction_key
      allowedKeys = 'e'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_relaxation_instruciton
      Code Type = Auto->JS
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      Each Frame:
        # if 'space' in baseline_instruction.keys:  # before ".key" should be the name of the component
        if relaxation_instruction_key.keys == 'e':
            # save the unix timestamp in the variable and export it to the log
            thisExp.addData('relaxation_instruction_ts', time.time())
            continueRoutine = False  # this ends the routine without waiting for the routine's set duration
  Routine Relaxation
    TextComponent relaxation
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = Entspannung im Gange
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    TextComponent relaxation_counttdown_15min
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $timeLeft
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    CodeComponent code_relaxation_countdown_15min
      Code Type = Auto->JS
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      Begin Routine:
        sample_clock = core.Clock()  # Initialize a clock to keep track of time
        samplecountDown = 900  # 900 - The starting value of the countdown in seconds


        #you can adjust the time by changing "samplecountDown"
      Each Frame:
        timer_ = samplecountDown - int(sample_clock.getTime())
        #calcualting minutes and second.
        minutes = int(timer_ / 60)
        seconds = int(timer_ - (minutes * 60))



        if minutes < 10:
            minutes_str = '0' + str(minutes)
        else:
            minutes_str = str(minutes)



        if seconds < 10:
            seconds_str = '0' + str(seconds)
        else:
            seconds_str = str(seconds)



        timeLeft = minutes_str + ':' + seconds_str



        if timer_ <= 0:
            timer_ = 0   # Ensure it doesn't display negative numbers
            timeLeft = 0
            continueRoutine = False
      End Routine:
        win.mouseVisible = True
        thisExp.addData('relaxation_ts', time.time())
    KeyboardComponent skip_key_6
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SAM_e
    ImageComponent image_sam_e0
      image = images/e0.jpg
      pos = (-.6, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent radio_e0
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = black
      pos = [-0.6, -0.15]
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent text_e0
      color = black
      letterHeight = 0.03
      pos = (-0.6, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Sehr entspannt
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    ImageComponent image_e1
      image = images/e1.png
      pos = (-.4, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent radio_e1
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = black
      pos = [-0.4, -0.15]
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    ImageComponent image_e2
      image = images/e2.png
      pos = (-.2, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent radio_e2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = black
      pos = [-0.2, -0.15]
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    ImageComponent image_e3
      image = images/e3.png
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent radio_e3
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = black
      pos = [0, -0.15]
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    ImageComponent image_e4
      image = images/e4.png
      pos = (0.2, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent radio_e4
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = black
      pos = [0.2, -0.15]
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    ImageComponent image_e5
      image = images/e5.png
      pos = (0.4, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent radio_e5
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = black
      pos = [0.4, -0.15]
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    ImageComponent image_e6
      image = images/e6.png
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent radio_e6
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = black
      pos = [0.6, -0.15]
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent text_e6
      color = black
      letterHeight = 0.03
      pos = (0.6, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Sehr angespannt​
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    MouseComponent mouse_e
      clickable = radio_e0,radio_e1,radio_e2, radio_e3, radio_e4, radio_e5, radio_e6
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_sam_e
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent spacebar_instruct
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = [0.4, -0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = [Bitte geben Sie an welche der unten gezeigten Figuren am besten zu Ihrem aktuellen Empfinden und Ihrer aktuellen Stimmung passt. Bestätigen Sie Ihre Eingabe mit der Leertaste.]
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    CodeComponent code_sam_e
      Code Type = Both
      Begin JS Routine:
        sam_e_timer = new core.Clock();
        radio_buttons_e = [radio_e0, radio_e1, radio_e2, radio_e3, radio_e4, radio_e5, radio_e6];
        identifiers_e = ["e0", "e1", "e2", "e3", "e4", "e5", "e6"];
        sam_count = (sam_count + 1);
        button_clicked = false;
        allow_space_press = false;
      Begin Routine:
        from psychopy import event
        win.mouseVisible = True
        sam_e_timer = core.Clock()
        win.mouseVisible = True
        event.clearEvents(eventType='keyboard')
        event.clearEvents(eventType='mouse')
        key_sam_e.keys = []
        key_sam_e.rt= []
        button_clicked_e = False
        radio_buttons_e = [radio_e0, radio_e1, radio_e2, radio_e3, radio_e4, radio_e5, radio_e6]
        identifiers_e = ['e0', 'e1', 'e2', 'e3', 'e4', 'e5', 'e6']
        # Resetting all buttons
        for b in radio_buttons_e:
            b.fillColor = 'white'
        sam_count = sam_count + 1
      Each Frame:
        if not button_clicked_e and key_sam_e.keys == 'space':
            # Clearing the key buffer
            event.clearEvents(eventType='keyboard')
            key_sam_e.keys = 'e'
            key_sam_e.rt= []

        for button in radio_buttons_e:
            if mouse_e.isPressedIn(button):
                # Reset all button colors to the default (e.g., 'white')
                for b in radio_buttons_e:
                    b.fillColor = 'white'
                # Change the selected button color to black
                button.fillColor = 'black'
                # Record the response time and timestamp
                response_time = sam_e_timer.getTime()
                thisExp.addData('sam_e_rt', response_time)
                thisExp.addData('sam_e_ts', time.time())
                i = radio_buttons_e.index(button)  # Get the index of the current button
                thisExp.addData('SAM_Number_e', identifiers_e[i])
                button_clicked_e = True

        if button_clicked_e:
            keys = event.getKeys()
            if 'space' in keys:
                continueRoutine = False
      Each JS Frame:
        for (var button, _pj_c = 0, _pj_a = radio_buttons_e, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            button = _pj_a[_pj_c];
            if (mouse_e.isPressedIn(button)) {
                for (var b, _pj_f = 0, _pj_d = radio_buttons_e, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    b = _pj_d[_pj_f];
                    b.fillColor = "white";
                }
                button.fillColor = "black";
                response_time = sam_e_timer.getTime();
                psychoJS.experiment.addData("sam_e_rt", response_time);
                psychoJS.experiment.addData("sam_e_ts", time.time());
                button_clicked = true;
                allow_space_press = true;
                key_sam_e.keys = "none";
            }
        }
        if ((! button_clicked)) {
            allow_space_press = false;
            key_sam_e.keys = "none";
        }
        if ((((key_sam_e.keys === "space") && allow_space_press) && button_clicked)) {
            continueRoutine = false;
        }
      End JS Routine:
        for (var button, _pj_c = 0, _pj_a = radio_buttons_e, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            button = _pj_a[_pj_c];
            if ((allow_space_press && button_clicked)) {
                if ((mouse_e.isPressedIn(button) && (key_sam_e.keys === "space"))) {
                    i = util.index(radio_buttons_e, button);
                    psychoJS.experiment.addData("SAM_Number", identifiers_e[i]);
                    break;
                }
            }
        }
      End Routine:
        for button in radio_buttons_e:
            if mouse_e.isPressedIn(button) and key_sam_e.keys == 'space':
                i = radio_buttons_e.index(button)  # Get the index of the current button
                thisExp.addData('SAM_Number_e', identifiers_e[i])
                event.clearEvents(eventType='keyboard')
                event.clearEvents(eventType='mouse')
                break  # Exit the loop once a button is pressed
  Routine SAM_a
    ImageComponent image_a0
      image = images/u0.png
      pos = (-.6, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent radio_a0
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = black
      pos = [-0.6, -0.15]
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent text_a0
      color = black
      letterHeight = 0.03
      pos = (-0.6, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Sehr unangenehm​
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    ImageComponent image_a1
      image = images/u1.png
      pos = (-.4, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent radio_a1
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = black
      pos = [-0.4, -0.15]
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    ImageComponent image_a2
      image = images/u2.png
      pos = (-.2, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent radio_a2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = black
      pos = [-0.2, -0.15]
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    ImageComponent image_a3
      image = images/u3.png
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent radio_a3
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = black
      pos = [0, -0.15]
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    ImageComponent image_a4
      image = images/u4.png
      pos = (0.2, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent radio_a4
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = black
      pos = [0.2, -0.15]
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    ImageComponent image_a5
      image = images/u5.png
      pos = (0.4, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent radio_a5
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = black
      pos = [0.4, -0.15]
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    ImageComponent image_a6
      image = images/u6.png
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent radio_a6
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = black
      pos = [0.6, -0.15]
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent text_a6
      color = black
      letterHeight = 0.03
      pos = (0.6, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Sehr angenehm​
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    MouseComponent mouse_a
      clickable = radio_a0,radio_a1,radio_a2,radio_a3,radio_a4,radio_a5,radio_a6
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_sam_a
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent spacebar_instruct_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = [0.4, -0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = [Bitte geben Sie an welche der unten gezeigten Figuren am besten zu Ihrem aktuellen Empfinden und Ihrer aktuellen Stimmung passt. Bestätigen Sie Ihre Eingabe mit der Leertaste.]
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    CodeComponent code_sam_a
      Code Type = Both
      Begin JS Routine:
        import {event} from 'psychopy';
        var button_clicked, identifiers_a, radio_buttons_a, sam_a_timer;
        sam_a_timer = new core.Clock();
        psychoJS.window.mouseVisible = true;
        psychoJS.eventManager.clearEvents({"eventType": "keyboard"});
        key_sam_a.keys = [];
        key_sam_a.rt = [];
        button_clicked = false;
        radio_buttons_a = [radio_a0, radio_a1, radio_a2, radio_a3, radio_a4, radio_a5, radio_a6];
        identifiers_a = ["a0", "a1", "a2", "a3", "a4", "a5", "a6"];
        for (var b, _pj_c = 0, _pj_a = radio_buttons_a, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            b = _pj_a[_pj_c];
            b.fillColor = "white";
        }
      Begin Routine:
        from psychopy import event
        sam_a_timer = core.Clock()
        win.mouseVisible = True
        event.clearEvents(eventType='keyboard')
        event.clearEvents(eventType='mouse')
        key_sam_a.keys = []
        key_sam_a.rt= []
        button_clicked_a = False
        radio_buttons_a = [radio_a0, radio_a1, radio_a2, radio_a3, radio_a4, radio_a5, radio_a6]
        identifiers_a = ['a0', 'a1', 'a2', 'a3', 'a4', 'a5', 'a6']
        # Resetting all buttons
        for b in radio_buttons_a:
            b.fillColor = 'white'
      Each Frame:
        if not button_clicked_a and key_sam_a.keys == 'space':
            # Clearing the key buffer
            event.clearEvents(eventType='keyboard')
            key_sam_a.keys = 'e'
            key_sam_a.rt= []

        for button in radio_buttons_a:
            if mouse_a.isPressedIn(button):
                # Reset all button colors to the default (e.g., 'white')
                for b in radio_buttons_a:
                    b.fillColor = 'white'
                # Change the selected button color to black
                button.fillColor = 'black'
                # Record the response time and timestamp
                response_time = sam_a_timer.getTime()
                thisExp.addData('sam_a_rt', response_time)
                thisExp.addData('sam_a_ts', time.time())
                i = radio_buttons_a.index(button)  # Get the index of the current button
                thisExp.addData('SAM_Number_a', identifiers_a[i])
                button_clicked_a = True

        if button_clicked_a:
            keys = event.getKeys()
            if 'space' in keys:
                continueRoutine = False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (((! button_clicked) && (key_sam_a.keys === "space"))) {
            psychoJS.eventManager.clearEvents({"eventType": "keyboard"});
            key_sam_a.keys = "e";
            key_sam_a.rt = [];
        }
        for (var button, _pj_c = 0, _pj_a = radio_buttons_a, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            button = _pj_a[_pj_c];
            if (mouse_a.isPressedIn(button)) {
                for (var b, _pj_f = 0, _pj_d = radio_buttons_a, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    b = _pj_d[_pj_f];
                    b.fillColor = "white";
                }
                button.fillColor = "black";
                response_time = sam_a_timer.getTime();
                psychoJS.experiment.addData("sam_a_rt", response_time);
                psychoJS.experiment.addData("sam_a_ts", time.time());
                button_clicked = true;
            }
        }
        if (button_clicked) {
            keys = psychoJS.eventManager.getKeys();
            if (_pj.in_es6("space", keys)) {
                continueRoutine = false;
            }
        }
      End JS Routine:
        for (var button, _pj_c = 0, _pj_a = radio_buttons_a, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            button = _pj_a[_pj_c];
            if ((mouse_a.isPressedIn(button) && (key_sam_a.keys === "space"))) {
                i = util.index(radio_buttons_a, button);
                psychoJS.experiment.addData("SAM_Number", identifiers_a[i]);
                break;
            }
        }
      End Routine:
        for button in radio_buttons_a:
            if mouse_a.isPressedIn(button) and key_sam_a.keys == 'space':
                i = radio_buttons_a.index(button)  # Get the index of the current button
                thisExp.addData('SAM_Number_a', identifiers_a[i])
                event.clearEvents(eventType='keyboard')
                event.clearEvents(eventType='mouse')
                break  # Exit the loop once a button is pressed
  Routine interstim
    TextComponent fix
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine relaxation_countdown
    TextComponent relaxation_countdown_
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $timeLeft
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    CodeComponent code_relaxation_countdown
      Code Type = Auto->JS
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      Begin Routine:
        sample_clock = core.Clock()  # Initialize a clock to keep track of time
        samplecountDown = 67  # 60 - The starting value of the countdown in seconds


        #you can adjust the time by changing "samplecountDown"
      Each Frame:
        timer_ = samplecountDown - int(sample_clock.getTime())
        #calcualting minutes and second.
        minutes = int(timer_ / 60)
        seconds = int(timer_ - (minutes * 60))



        if minutes < 10:
            minutes_str = '0' + str(minutes)
        else:
            minutes_str = str(minutes)



        if seconds < 10:
            seconds_str = '0' + str(seconds)
        else:
            seconds_str = str(seconds)



        timeLeft = minutes_str + ':' + seconds_str



        if timer_ <= 0:
            timer_ = 0   # Ensure it doesn't display negative numbers
            timeLeft = 0
            continueRoutine = False
      End Routine:
        win.mouseVisible = True
  Routine SAM_Intro
    TextComponent SAM_Introduction
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Sie werden gleich eine Skala sehen mit der wir Ihr aktuelles Empfinden und Ihre Stimmung erfassen wollen.
        Bitte klicken Sie für jede Skalenreihe zunächst den Punkt unter der gezeigten Figur an, die zu Ihrem aktuellen Empfinden und Ihrer aktuellen Stimmung passt. Bestätigen Sie Ihre Eingabe mit der Leertaste.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_sam_intro
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
    TextComponent SAM_intro_text_instruct
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0,-0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Bitte drücken Sie die Leertaste, um fortzufahren.
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  Routine Baseline_counter
    TextComponent Baseline_Counter
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      text = $timeLeft
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    CodeComponent code_baseline
      Code Type = Py
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      Begin Routine:
        sample_clock = core.Clock()  # Initialize a clock to keep track of time
        samplecountDown = 67  # 60 - The starting value of the countdown in seconds


        #you can adjust the time by changing "samplecountDown"
      Each Frame:
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      End Routine:
        win.mouseVisible = True
  Routine CountDown_3min
    TextComponent prep_time_countdown_3min
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $timeLeft
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    CodeComponent code_preptime_countdown_3min
      Code Type = Auto->JS
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      Begin Routine:
        sample_clock = core.Clock()  # Initialize a clock to keep track of time
        samplecountDown = 180  # 180 - The starting value of the countdown in seconds

        #you can adjust the time by changing "samplecountDown"
      Each Frame:
        timer_ = samplecountDown - int(sample_clock.getTime())
        #calcualting minutes and second.
        minutes = int(timer_ / 60)
        seconds = int(timer_ - (minutes * 60))


        if minutes < 10:
            minutes_str = '0' + str(minutes)
        else:
            minutes_str = str(minutes)



        if seconds < 10:
            seconds_str = '0' + str(seconds)
        else:
            seconds_str = str(seconds)



        timeLeft = minutes_str + ':' + seconds_str



        if timer_ <= 0:
            timer_ = 0   # Ensure it doesn't display negative numbers
            timeLeft = 0
            continueRoutine = False
      End Routine:
        thisExp.addData('end_countDown_3min_ts', time.time())
    TextComponent Heading
      color = 0.3255, 0.3255, 0.3255
      letterHeight = 0.05
      pos = [0, 0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Countdown Baseline
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    KeyboardComponent skip_key_1
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stress_rating
    TextComponent Question_stress
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Wie gestresst fühlen Sie sich in diesem Moment?
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    SliderComponent stress_slider
      borderColor = 0.0000, 0.0000, 0.0000
      color = Black
      forceEndRoutine = False
      granularity = 1
      initVal = 1
      labels = ('gar nicht', '', '', '', '', '', 'sehr stark')
      letterHeight = 0.05
      pos = (0, -0.175)
      size = (1.11, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    KeyboardComponent key_resp_Q
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent spacebar_instruct_stress
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = [0.4, -0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = [Auswahl mit der Maus, mit Leertaste bestätigen]
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    CodeComponent code_stress_rating
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import event
        event.clearEvents(eventType='keyboard')
  Routine Saliva_sample_1
    TextComponent Saliva_sample_1_instruction
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bitte geben Sie nun Speichelprobe 1 ab!

        Das Röhrchen erhalten Sie von der Versuchsleitung.

        [VL Taste um Countdown Speichelprobe zu starten]
    KeyboardComponent Saliva_sample_1_key
      allowedKeys = 'e'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_saliva_sample_1
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = False
      Each Frame:
        if Saliva_sample_1_key.keys == 'e':
            # save the unix timestamp in the variable and export it to the log
            thisExp.addData('saliva_probe_1_ts', time.time())
            continueRoutine = False  # this ends the routine without waiting for the routine's set duration
  Routine Saliva_sample_2
    TextComponent Saliva_sample_2_instruction
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bitte geben Sie nun Speichelprobe 2 ab!

        Das Röhrchen erhalten Sie von der Versuchsleitung.

        [VL Taste um Countdown Speichelprobe zu starten]
    KeyboardComponent Saliva_sample_2_key
      allowedKeys = 'e'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_saliva_sample_2
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = False
      Each Frame:
        # if 'space' in baseline_instruction.keys:  # before ".key" should be the name of the component
        if Saliva_sample_2_key.keys == 'e':
            # save the unix timestamp in the variable and export it to the log
            thisExp.addData('saliva_probe_2_ts', time.time())
            continueRoutine = False  # this ends the routine without waiting for the routine's set duration
  Routine Saliva_sample_3
    TextComponent Saliva_sample_3_instruction
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bitte geben Sie nun Speichelprobe 3 ab!

        Das Röhrchen erhalten Sie von der Versuchsleitung.

        [VL Taste um Countdown Speichelprobe zu starten]
    KeyboardComponent Saliva_sample_3_key
      allowedKeys = 'e'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_saliva_sample_3
      Code Type = Both
      Begin JS Routine:
        timestamp.push(time.time());
      Each Frame:
        # if 'space' in baseline_instruction.keys:  # before ".key" should be the name of the component
        if Saliva_sample_3_key.keys == 'e':
            # save the unix timestamp in the variable and export it to the log
            thisExp.addData('saliva_probe_3_ts', time.time())
            continueRoutine = False  # this ends the routine without waiting for the routine's set duration
  Routine buzzer
    SoundComponent countdown_buzz
      saveStartStop = False
      sound = sound/buzzer.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine LimeSurvey_countdown
    TextComponent Lime_survey_countdown
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $timeLeft
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    CodeComponent code_limesurvey_countdown
      Code Type = Both
      Begin JS Routine:
        sample_clock = new core.Clock();
        samplecountDown = 5;
      Begin Routine:
        sample_clock = core.Clock()  # Initialize a clock to keep track of time
        samplecountDown = 600  # 600 - The starting value of the countdown in seconds


        #you can adjust the time by changing "samplecountDown"
      Each Frame:
        timer_ = samplecountDown - int(sample_clock.getTime())
        #calcualting minutes and second.
        minutes = int(timer_ / 60)
        seconds = int(timer_ - (minutes * 60))
        if minutes < 10:
            minutes_str = '0' + str(minutes)
        else:
            minutes_str = str(minutes)
        if seconds < 10:
            seconds_str = '0' + str(seconds)
        else:
            seconds_str = str(seconds)
        timeLeft = minutes_str + ':' + seconds_str

        #if timer_ <= 0:
         #   timer_ = 0   # Ensure it doesn't display negative numbers
          #  timeLeft = 0
           # continueRoutine = False
      Each JS Frame:
        timer = (samplecountDown - Number.parseInt(sample_clock.getTime()));
        minutes = Number.parseInt((timer / 60));
        seconds = Number.parseInt((timer - (minutes * 60)));
        if ((minutes < 10)) {
            minutes_str = ("0" + minutes.toString());
        } else {
            minutes_str = minutes.toString();
        }
        if ((seconds < 10)) {
            seconds_str = ("0" + seconds.toString());
        } else {
            seconds_str = seconds.toString();
        }
        timeLeft = ((minutes_str + ":") + seconds_str);
        if ((timer <= 0)) {
            timer = 0;
            timeLeft = 0;
            continueRoutine = false;
        }
      End Routine:
        thisExp.addData('limeSurvey_ts', time.time())
    TextComponent LimeSurvey_heading
      color = 0.3255, 0.3255, 0.3255
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        LimeSurvey Countdown
    KeyboardComponent key_resp_3
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instruction_experimenter_LimeSurvey
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.07)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = [VL Taste drücken wenn LimeSurvey fertig]
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    KeyboardComponent skip_key
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LimeSurvey_instruction
    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = [VL Taste drücken um LimeSurvey Cundown zu starten]
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    KeyboardComponent key_resp_2
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End_screen
    TextComponent final_instruction
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ende des Experiments
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    KeyboardComponent final_instruction_key
      allowedKeys = 'e'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_final_instruction
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = False
      Each Frame:
        # if 'space' in baseline_instruction.keys:  # before ".key" should be the name of the component
        if final_instruction_key.keys == 'e':
            # save the unix timestamp in the variable and export it to the log
            thisExp.addData('final_instruction_ts', time.time())
            continueRoutine = False  # this ends the routine without waiting for the routine's set duration
  Routine Salvia_sample_4
    TextComponent Salvia_sample_4_instruction_2
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        "Bitte geben Sie uns nun Speichelprobe 4!
        Das Röhrchen erhalten Sie von der Versuchsleitung."
    KeyboardComponent Salvia_sample_4_key_2
      allowedKeys = 'e'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_salvia_sample
      Code Type = Py
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      Each Frame:
        # if 'space' in baseline_instruction.keys:  # before ".key" should be the name of the component
        if Saliva_sample_4_key.keys == 'e':
            # save the unix timestamp in the variable and export it to the log
            thisExp.addData('saliva_probe_4_ts', time.time())
            continueRoutine = False  # this ends the routine without waiting for the routine's set duration
  Routine CountDown_5min_preparation
    TextComponent prep_time_countdown
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $timeLeft
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    CodeComponent code_preptime_countdown
      Code Type = Auto->JS
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      Begin Routine:
        sample_clock = core.Clock()  # Initialize a clock to keep track of time
        samplecountDown = 300  # 300 - The starting value of the countdown in seconds

        #you can adjust the time by changing "samplecountDown"
      Each Frame:
        timer_ = samplecountDown - int(sample_clock.getTime())
        #calcualting minutes and second.
        minutes = int(timer_ / 60)
        seconds = int(timer_ - (minutes * 60))
        if minutes < 10:
            minutes_str = '0' + str(minutes)
        else:
            minutes_str = str(minutes)
        if seconds < 10:
            seconds_str = '0' + str(seconds)
        else:
            seconds_str = str(seconds)
        timeLeft = minutes_str + ':' + seconds_str



        if timer_ <= 0:
            timer_ = 0   # Ensure it doesn't display negative numbers
            timeLeft = 0
            continueRoutine = False
      End Routine:
        thisExp.addData('end_countDown_5min_prep_ts', time.time())
    TextComponent Heading_5min
      color = 0.3255, 0.3255, 0.3255
      letterHeight = 0.05
      pos = [0, 0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = TSST Vorbereitung Präsentation läuft
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    KeyboardComponent skip_key_3
      allowedKeys = 'q'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine CountDown_5min_arithmetic
    TextComponent aithmetic_time_countdown
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $timeLeft
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    CodeComponent code_arithmetic_countdown
      Code Type = Py
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      Begin Routine:
        sample_clock = core.Clock()  # Initialize a clock to keep track of time
        samplecountDown = 300  # 300 - The starting value of the countdown in seconds

        #you can adjust the time by changing "samplecountDown"
      Each Frame:
        timer_ = samplecountDown - int(sample_clock.getTime())
        #calcualting minutes and second.
        minutes = int(timer_ / 60)
        seconds = int(timer_ - (minutes * 60))
        if minutes < 10:
            minutes_str = '0' + str(minutes)
        else:
            minutes_str = str(minutes)
        if seconds < 10:
            seconds_str = '0' + str(seconds)
        else:
            seconds_str = str(seconds)
        timeLeft = minutes_str + ':' + seconds_str



        if timer_ <= 0:
            timer_ = 0   # Ensure it doesn't display negative numbers
            timeLeft = 0
            continueRoutine = False
      End Routine:
        thisExp.addData('end_countDown_5min_arithmetic_ts', time.time())
    TextComponent Heading_arithmetic_5min
      color = 0.3255, 0.3255, 0.3255
      letterHeight = 0.05
      pos = [0, 0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = TSST Arithmetic Task läuft
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    KeyboardComponent skip_key_5
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CountDown_5min_presentation
    TextComponent presentation_countdown
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $timeLeft
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    CodeComponent code_presentation_countdown
      Code Type = Auto->JS
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      Begin Routine:
        sample_clock = core.Clock()  # Initialize a clock to keep track of time
        samplecountDown = 300  # 300 - The starting value of the countdown in seconds

        #you can adjust the time by changing "samplecountDown"
      Each Frame:
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      End Routine:
        thisExp.addData('end_countDown_5min_pres_ts', time.time())
    TextComponent Heading_5min_pres
      color = 0.3255, 0.3255, 0.3255
      letterHeight = 0.05
      pos = [0, 0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = TSST Präsentation läuft
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    KeyboardComponent skip_key_4
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Saliva_sample_4
    TextComponent Salvia_sample_4_instruction
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bitte geben Sie nun Speichelprobe 4 ab!

        Das Röhrchen erhalten Sie von der Versuchsleitung.

        [VL Taste um Countdown Speichelprobe zu starten]
    KeyboardComponent Saliva_sample_4_key
      allowedKeys = 'e'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_saliva_sample_4
      Code Type = Both
      Begin JS Routine:
        timestamp.push(time.time());
      Each Frame:
        # if 'space' in baseline_instruction.keys:  # before ".key" should be the name of the component
        if Saliva_sample_4_key.keys == 'e':
            # save the unix timestamp in the variable and export it to the log
            thisExp.addData('saliva_probe_4_ts', time.time())
            continueRoutine = False  # this ends the routine without waiting for the routine's set duration
Flow
  Routine Baseline_Instruction
  Routine CountDown_3min
  Routine SAM_Intro
  Routine SAM_e
  Routine interstim
  Routine SAM_a
  Routine Stress_rating
  Routine Saliva_sample_1
  Routine Sampling_countdown
  Routine change_room
  Routine TSST_preparation
  Routine CountDown_5min_preparation
  Routine buzzer
  Routine TSST_presentation
  Routine CountDown_5min_presentation
  Routine buzzer
  Routine CountDown_5min_arithmetic
  Routine buzzer
  Routine TSST_end
  Routine SAM_e
  Routine interstim
  Routine SAM_a
  Routine interstim
  Routine Stress_rating
  Routine Saliva_sample_2
  Routine Sampling_countdown
  Routine Relaxation_instruction
  Routine Relaxation
  Routine SAM_e
  Routine interstim
  Routine SAM_a
  Routine interstim
  Routine Stress_rating
  Routine Saliva_sample_3
  Routine Sampling_countdown
  Routine LimeSurvey_countdown
  Routine SAM_e
  Routine interstim
  Routine SAM_a
  Routine interstim
  Routine Stress_rating
  Routine Saliva_sample_4
  Routine Sampling_countdown
  Routine End_screen
