PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = simple_targte_distractor
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent target
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = T
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        n_distractors = 10
        distractors = []
        for ii in range(n_distractors):
            distractor = visual.TextStim(win=win, name='distractor',
                    text='l',
                    font='Open Sans',
                    pos=(random()-0.5, random()-0.5), height=0.05, wrapWidth=None, ori=0.0,
                    color='white', colorSpace='rgb', opacity=None,
                    languageStyle='LTR',
                    depth=-1.0);

            distractors.append(distractor)


        for distractor in distractors:
            distractor.setAutoDraw(True)
      End Routine:
        for distractor in distractors:
            distractor.setAutoDraw(False)
    MouseComponent respose_user
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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Flow
  Routine trial
