PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sony_digirelax_practice
  keyboardBackend = ioHub
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Routines
  Routine trial
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  Routine Baseline_Instruction
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    TextComponent baseline_instruction
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Nachfolgend wird die Baseline-Messung für 3 Minuten starten.

        Wenn die Testperson bereit ist, drücke bitte die Versuchsleiter-Taste.
    KeyboardComponent key_baseline_instruction
      allowedKeys = "e"
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import time
        from psychopy import core
      Begin Experiment:
        timeLeft = 60
        sam_count = 1
        if event:
            thisExp.addData('Reference_time', time.time())
      Begin Routine:
        win.mouseVisible = False
      Each Frame:
        # if 'space' in baseline_instruction.keys:  # before ".key" should be the name of the component
        if key_baseline_instruction.keys == 'e':
            # save the unix timestamp in the variable and export it to the log
            thisExp.addData('baseline_instruction_ts', time.time())
            continueRoutine = False  # this ends the routine without waiting for the routine's set duration
Flow
  Routine Baseline_Instruction
