PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = my_first_exp
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
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    TextComponent text_welcome_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to my first experiment: first text

        Press SPACEBAR to begin
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine GoodByeScreen
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    TextComponent text_goodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Goodbye for now, see you soon!
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  Routine blank_500ms_goodbye
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  Routine blank_500ms_welcome
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    TextComponent empyt_text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = blank_screen
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  Routine blank_routine
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    TextComponent disp_fruit_name
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine trial_2
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    ImageComponent image_stim
      image [set every repeat] = $stim_list
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine stimulai_notification
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    TextComponent block_start_noti
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = new block is going to start
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Flow
  Routine WelcomeScreen
  Routine blank_500ms_welcome
  LoopInitiator stim_blocks loopType="TrialHandler"
    conditionsFile = stim_blocks.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'blocks_list': 'fruit_stim.xlsx'},
      {'blocks_list': 'colour_stim.xlsx'}]
    Routine stimulai_notification
    LoopInitiator selected_stim loopType="TrialHandler"
      conditionsFile = $blocks_list
      loopType = random
      nReps = 1
      random seed = 1
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      conditions:
        [{'stim_list': 'img_exp/apple.jpg'},
        {'stim_list': 'img_exp/banana.jpg'},
        {'stim_list': 'img_exp/grapes.jpg'},
        {'stim_list': 'img_exp/orange.jpg'}]
      Routine trial_2
    LoopTerminator selected_stim
  LoopTerminator stim_blocks
  Routine blank_500ms_goodbye
  Routine GoodByeScreen
